PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = nh_PermanenceTask
  keyboardBackend = ioHub
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Routines
  Routine intro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Welcome to the Permanence Rating Task
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  Routine instruction1
    TextComponent instruction_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will look at the following objects and indicate how often do you think the object's position will change in an environment. 1 representing never, 3 representing somtimes, and 5 representing very often.

        Press SPACEBAR to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_permanence
    TextComponent permanence_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = On a scale of 1-5, how permanent is the object?
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    KeyboardComponent permanence_Resp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent imageA
      image [set every repeat] = $landmark_imagesA
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent imageB
      image [set every repeat] = $landmark_imagesB
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent imageC
      image [set every repeat] = $landmark_imagesC
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank You for your participation in the Permanence Rating Task
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Flow
  Routine intro
  Routine instruction1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = NH_PermanenceTask/data/landmark_stims.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'landmark_imagesA': 'images/Landmark1.png', 'landmark_imagesB': 'images/Landmark5.png', 'landmark_imagesC': 'images/Landmark9.png'},
      {'landmark_imagesA': 'images/Landmark2.png', 'landmark_imagesB': 'images/Landmark6.png', 'landmark_imagesC': 'images/Landmark10.png'},
      {'landmark_imagesA': 'images/Landmark3.png', 'landmark_imagesB': 'images/Landmark7.png', 'landmark_imagesC': 'images/Landmark11.png'},
      {'landmark_imagesA': 'images/Landmark4.png', 'landmark_imagesB': 'images/Landmark8.png', 'landmark_imagesC': 'images/Landmark12.png'}]
    Routine feedback_permanence
  LoopTerminator trials
  Routine end
